PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.1.4
  Window size (pixels) = [1440, 900]
  expName = lab10
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Auto->JS
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      Begin Experiment:
        import statistics

        fix_time = .5

        trial_n = 1
        block_n = 1
        block_count = 1
        block_multiplier = 2 # should equal number of phoneme pairs tested

        win.mouseVisible = False

        dg_resps = [0]*20
        dg_transition = [0]
        bd_resps = [0]*20
        bd_transition = [0]

        dg_before_acc = 0
        dg_mid_acc = 0
        dg_after_acc = 0
        bd_before_acc = 0
        bd_mid_acc = 0
        bd_after_acc = 0

        dg_before_trial_n = 0
        dg_mid_trial_n = 0
        dg_after_trial_n = 0
        bd_before_trial_n = 0
        bd_mid_trial_n = 0
        bd_after_trial_n = 0

        def transition_count(response_array, right_end, transition_array):
            for index, resp in enumerate(response_array):
                if (resp == right_end) and (previous_resp == right_end):
                    transition_array.append(index-1)
                    break
                previous_resp = resp
            return transition_array
  Routine final
    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Routine:
        msg_1 = f"Transition Point\nD-G\n {dg_transition_point}"
        msg_2 = f"Transition Point\nB-D\n {bd_transition_point}"
        msg_3 = f"Discrimination\nBefore\nD-G\n {round(dg_before_acc/dg_before_trial_n, 1)}"
        msg_4 = f"Discrimination\nMid\nD-G\n {round(dg_mid_acc/dg_mid_trial_n, 1)}"
        msg_5 = f"Discrimination\nAfter\nD-G\n {round(dg_after_acc/dg_after_trial_n, 1)}"
        msg_6 = f"B-D\n {round(bd_before_acc/bd_before_trial_n, 1)}"
        msg_7 = f"B-D\n {round(bd_mid_acc/bd_mid_trial_n, 1)}"
        msg_8 = f"B-D\n {round(bd_after_acc/bd_after_trial_n, 1)}"

        thisExp.addData("Discrimination Before D-G ",  round(dg_before_acc/dg_before_trial_n, 1))
        thisExp.addData("Discrimination Mid D-G ",  round(dg_mid_acc/dg_mid_trial_n, 1))
        thisExp.addData("Discrimination After D-G ",  round(dg_after_acc/dg_after_trial_n, 1))
        thisExp.addData("Discrimination Before B-D ",  round(bd_before_acc/bd_before_trial_n, 1))
        thisExp.addData("Discrimination Mid B-D ",  round(bd_mid_acc/bd_mid_trial_n, 1))
        thisExp.addData("Discrimination After B-D ",  round(bd_after_acc/bd_after_trial_n, 1))
    TextComponent end_text
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Results:
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    TextComponent end_text_1
      letterHeight = 0.03
      pos = (-.2, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_1
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    TextComponent end_text_2
      letterHeight = 0.03
      pos = (.2, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_2
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    TextComponent end_text_3
      letterHeight = 0.03
      pos = (-.3, .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_3
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    TextComponent end_text_4
      letterHeight = 0.03
      pos = (0, .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_4
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    TextComponent end_text_5
      letterHeight = 0.03
      pos = (.3, .05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_5
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    TextComponent end_text_6
      letterHeight = 0.03
      pos = (-.3, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_6
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    TextComponent end_text_7
      letterHeight = 0.03
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_7
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    TextComponent end_text_8
      letterHeight = 0.03
      pos = (.3, -.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_8
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    TextComponent end_text_9
      letterHeight = 0.05
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Record this result.

        Press SPACE when you are ready to end the experiment.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 120
      store = nothing
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  Routine fixation
    PolygonComponent fixation_stim
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
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  Routine feedback
    TextComponent feedback_text1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_msg
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    TextComponent feedback_text2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to continue.
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    KeyboardComponent key_resp_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
  Routine end_practice
    TextComponent end_practice_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice!

        Now it's time to begin the real experimental trials. These will be exactly the same as what you just practiced, but you will no longer receive feedback.

        You will see a screen encouraging you to take a break at several times during the experiment. When you have completed all trials, you will see your accuracy results. Record these results and report them to your instructor.

        If you have any questions, please ask your instructor now.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_end_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        total_accuracy_same = 0
        total_accuracy_contour = 0
        total_accuracy_interval = 0
  Routine get_ready
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Ready?

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_id
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        if key_resp_3.keys == "left":
            key_response = left_resp
        elif key_resp_3.keys == "right":
            key_response = right_resp

        if "dg" in block:
            dg_resps[stim_number] = key_response
        elif "bd" in block:
            bd_resps[stim_number] = key_response
    SoundComponent sound_id
      saveStartStop = False
      sound [set every repeat] = $stimuli_sound
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f">\n{right_resp.upper()}"
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    TextComponent text_4
      letterHeight = 0.05
      pos = (-.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"<\n{left_resp.upper()}"
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  Routine response_id
    CodeComponent code_response
      Code Type = Auto->JS
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      Begin Routine:
        if change == "yes":
            corr_ans = "right"
            corr_resp = "different"
        elif change == "no":
            corr_ans = "left"
            corr_resp = "same"
      End Routine:
        feedback_msg = ''
        if key_resp.corr == 1:
            feedback_msg = f"Correct! The tones were {corr_resp.upper()}."
        else:
            feedback_msg = f"Incorrect. The tones were {corr_resp.upper()}. The correct answer was {corr_ans.upper()}."


        if change == "no":
            total_accuracy_same += key_resp.corr
        elif change_condition == "contour":
            total_accuracy_contour += key_resp.corr
        elif change_condition == "interval":
            total_accuracy_interval += key_resp.corr
    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        >
        DIFFERENT
    TextComponent text_3
      letterHeight = 0.05
      pos = (-.25, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        <
        SAME
    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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  Routine instructions_id
    TextComponent instruct_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        During this experiment, you will complete two tasks. During the first task, you will hear a sound. Your job is to identify if the sound starts with one of two phonemes. Please make sure that you have the sound on your computer turned on.

        During the trial, you will first see a cross in the center of the screen. This is your warning that the sound is about to appear and that you should get ready. Next, you will hear the sound. Then, you will see the response screen. When you see the response screen, use the arrow keys to indicate which phoneme you think was at the start of the sound.

        Let's try a few practice trials.

        Press SPACE to begin the practice.
    KeyboardComponent key_resp_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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  Routine instructions_disc
    TextComponent instruct_text_2
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Congratulations, you have finished the first task!

        During the second task, you will hear two sounds similar to the sounds you heard earlier. Your job is to identify if the two sounds are the same or different. Please make sure that you have the sound on your computer turned on.

        During the trial, you will first see a cross in the center of the screen. This is your warning that the sounds are about to appear and that you should get ready. Next, you will hear the first sound. There will be a brief delay and then you will hear the second sound. Finally, you will see the response screen. When you see the response screen, press the LEFT arrow key if you think the sounds are the SAME or the RIGHT arrow key if you think the sounds are different.
    KeyboardComponent key_resp_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        dg_transition_point = int(round(statistics.mean(dg_transition), 0))
        bd_transition_point = int(round(statistics.mean(bd_transition), 0))

        block_count = 1
  Routine trial_disc
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if "dg" in block:
            midpoint = dg_transition_point
        elif "bd" in block:
            midpoint = bd_transition_point

        choice_cond = np.random.choice([1,2])

        if choice_cond == 1: # different condition
            stim_sound_2 = stimuli_sound_2
            corr_ans = "right"
        elif choice_cond == 2: # same condition
            stim_sound_2 = stimuli_sound_1
            corr_ans = "left"
      End Routine:
        if ("dg" in block):
            if (stim_number_1 < midpoint) and (stim_number_2 < midpoint):
                dg_before_trial_n += 1
                if (key_resp_4.keys == corr_ans) and (choice_cond == 1):
                    dg_before_acc += 1
            elif (stim_number_1 < midpoint) and (stim_number_2 >= midpoint):
                dg_mid_trial_n += 1
                if (key_resp_4.keys == corr_ans) and (choice_cond == 1):
                    dg_mid_acc += 1
            elif (stim_number_1 >= midpoint) and (stim_number_2 >= midpoint):
                dg_after_trial_n += 1
                if (key_resp_4.keys == corr_ans) and (choice_cond == 1):
                    dg_after_acc += 1

        if ("bd" in block):
            if (stim_number_1 < midpoint) and (stim_number_2 < midpoint):
                bd_before_trial_n += 1
                if (key_resp_4.keys == corr_ans) and (choice_cond == 1):
                    bd_before_acc += 1
            elif (stim_number_1 < midpoint) and (stim_number_2 >= midpoint):
                bd_mid_trial_n += 1
                if (key_resp_4.keys == corr_ans) and (choice_cond == 1):
                    bd_mid_acc += 1
            elif (stim_number_1 >= midpoint) and (stim_number_2 >= midpoint):
                bd_after_trial_n += 1
                if (key_resp_4.keys == corr_ans) and (choice_cond == 1):
                    bd_after_acc += 1
    SoundComponent sound_id_2
      saveStartStop = False
      sound [set every repeat] = $stimuli_sound_1
      startVal [time (s)] = 0.0
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    SoundComponent sound_id_3
      saveStartStop = False
      sound [set every repeat] = $stim_sound_2
      startVal [time (s)] = 1.5
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    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ?
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_7
      letterHeight = 0.05
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f">\nDIFFERENT"
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    TextComponent text_10
      letterHeight = 0.05
      pos = (-.2, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"<\nSAME"
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  Routine end_block_id
    CodeComponent block_end_code
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n*block_multiplier) + " of the first task."

        if "dg" in block:
            dg_transition = transition_count(dg_resps, right_resp, dg_transition)
        elif "bd" in block:
            bd_transition = transition_count(bd_resps, right_resp, bd_transition)
      End Routine:
        block_count += 1
    TextComponent block_message1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_block_disc
    CodeComponent block_end_code_2
      Code Type = Auto->JS
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      Begin Routine:
        block_msg = "You have reached the end of block " + str(block_count) + " of " + str(block_n*block_multiplier) + " of the second task."



        print(dg_before_acc, dg_mid_acc, dg_after_acc, bd_before_acc, bd_mid_acc, bd_after_acc)
      End Routine:
        block_count += 1
    TextComponent block_message1_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_msg
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    TextComponent block_message2_2
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a short break.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_block_cont_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine instructions_id
  LoopInitiator block_id loopType="TrialHandler"
    conditionsFile = block_conds_id.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'a_dg'), ('rows_run', '1:20')]),
      OrderedDict([('block', 'u_bd'), ('rows_run', '141:160')])]
    LoopInitiator trials_id loopType="TrialHandler"
      Selected rows = $rows_run
      conditionsFile = stim_conds_id.csv
      loopType = random
      nReps = trial_n
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      conditions:
        [OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/01.wav'), ('stim_number', 0), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/02.wav'), ('stim_number', 1), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/03.wav'), ('stim_number', 2), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/04.wav'), ('stim_number', 3), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/05.wav'), ('stim_number', 4), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/06.wav'), ('stim_number', 5), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/07.wav'), ('stim_number', 6), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/08.wav'), ('stim_number', 7), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/09.wav'), ('stim_number', 8), ('left_resp', 'd'), ('right_resp', 'g')]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound', 'CV_stimuli/a/a_dg_CV/10.wav'), ('stim_number', 9), ('left_resp', 'd'), ('right_resp', 'g')])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
      Routine fixation
      Routine trial_id
    LoopTerminator trials_id
    Routine end_block_id
  LoopTerminator block_id
  Routine instructions_disc
  LoopInitiator block_disc loopType="TrialHandler"
    conditionsFile = block_conds_disc.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block', 'a_dg'), ('rows_run', '1:18')]),
      OrderedDict([('block', 'u_bd'), ('rows_run', '127:144')])]
    LoopInitiator trials_disc loopType="TrialHandler"
      Selected rows = $rows_run
      conditionsFile = stim_conds_disc.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/01.wav'), ('stim_number_1', 0), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/03.wav'), ('stim_number_2', 2)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/02.wav'), ('stim_number_1', 1), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/04.wav'), ('stim_number_2', 3)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/03.wav'), ('stim_number_1', 2), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/05.wav'), ('stim_number_2', 4)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/04.wav'), ('stim_number_1', 3), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/06.wav'), ('stim_number_2', 5)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/05.wav'), ('stim_number_1', 4), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/07.wav'), ('stim_number_2', 6)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/06.wav'), ('stim_number_1', 5), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/08.wav'), ('stim_number_2', 7)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/07.wav'), ('stim_number_1', 6), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/09.wav'), ('stim_number_2', 8)]),
        OrderedDict([('block', 'a_dg'), ('stimuli_sound_1', 'CV_stimuli/a/a_dg_CV/08.wav'), ('stim_number_1', 7), ('stimuli_sound_2', 'CV_stimuli/a/a_dg_CV/10.wav'), ('stim_number_2', 9)])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
      Routine fixation
      Routine trial_disc
    LoopTerminator trials_disc
    Routine end_block_disc
  LoopTerminator block_disc
  Routine final
